[[protocol]]
# pr3-steady-activation
# Level Start   Length  Period  Multiplier
-90    next    2000      0       0
-80    next    200     0       0
-90    next    2000      0       0
-70    next    200     0       0
-90    next    2000      0       0
-60    next    200     0       0
-90    next    2000      0       0
-50    next    200     0       0
-90    next    2000      0       0
-40    next    200     0       0
-90    next    2000      0       0
-35    next    200     0       0
-90    next    2000      0       0
-30    next    200     0       0
-90    next    2000      0       0
-25    next    200     0       0
-90    next    2000      0       0
-20    next    200     0       0
-90    next    2000      0       0
-15    next    200     0       0
-90    next    2000      0       0
-10    next    200     0       0
-90    next    2000      0       0
1    next    200     0       0
-90    next    2000      0       0
10    next    200     0       0
-90    next    2000      0       0
20    next    200     0       0
-90    next    2000      0       0
30    next    200     0       0
-90    next    2000      0       0
40    next    200     0       0
-90    next    2000      0       0
50    next    200     0       0
